PsychoPy2experiment version="2026.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/blank_placeholder.png', 'resources/squid_game_doll_backward_desaturated.png', 'resources/squid_game_doll_backward.png', 'resources/squid_game_doll_both.png', 'resources/squid_game_doll_forward.png', 'resources/squid_game_doll.pixil']
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = class_demo_redlight_greenlight
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instr
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    TextComponent instr_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The game that you are about to play is called Red Light, Green Light. You will see a rapid serial presentation of two dolls - one facing forward and the other facing backwards. Whenever you see a doll facing backwards ("Green Light"), you will respond by pressing the space bar as quickly as you can. Whenever you see a doll facing forwards ("Red Light"), you will withhold responding.

        When you're ready, please press the spacebar to begin!
    KeyboardComponent intr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    ImageComponent doll_image
      image [set every repeat] = $trial_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from random import random

        trial_img = "resources/squid_game_doll_backward.png"

        all_img = ["resources/squid_game_doll_backward.png", "resources/squid_game_doll_forward.png"]



        num_trials = 20
        trial_sequence = []

        for i in range(num_trials):
            trial_sequence.append(round(random()))
      Begin Routine:
        trial_val = trial_sequence[trials.thisN]

        trial_img = all_img[trial_val]
    KeyboardComponent trial_kb
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine feedback
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        task_kb_keys = trials.data['trial_kb.keys']
        nogo_responses = []

        for i in range(num_trials):
            trial_type = trial_sequence[i]

            if trial_type:
                nogo_responses.append(task_kb_keys[i] != 'space')


        correct_resp = sum(nogo_responses)
        total_resp = len(nogo_responses)
        percent_correct = int((correct_resp/total_resp)*100)

        feedback_string = f"Correct: {correct_resp} \n Total: {total_resp} \n Percentage: {percent_correct}%"

        thisExp.addData('correct_responses', correct_resp)
        thisExp.addData('total_nogo_trials', total_resp)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_string
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = num_trials
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    Routine trial
  LoopTerminator trials
  Routine feedback
